PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': 'participant', 'session': '001', 'age*': '', 'gender*': "['female';'male';'other']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1280, 720]
  expName = my_stroop
  keyboardBackend = ioHub
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Routines
  Routine stroop
    PolygonComponent polygon_5
      fillColor = black
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.5
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    TextComponent Fijación
      letterHeight = 0.16
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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    TextComponent Estímulo
      color [set every repeat] = $letterColor
      letterHeight = 0.25
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $words
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    KeyboardComponent Respuesta
      allowedKeys = 'left','down','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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  Routine Practica
    PolygonComponent polygon
      fillColor = black
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.5
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    TextComponent Fijación_2
      letterHeight = 0.16
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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    TextComponent Estímulo_2
      color [set every repeat] = $letterColor_p
      letterHeight = 0.25
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $words_p
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    KeyboardComponent Respuesta_2
      allowedKeys = 'left','down','right'
      correctAns = $corrAns_p
      forceEndRoutine = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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  Routine Retroalimentacion
    PolygonComponent polygon_7
      fillColor = black
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent retroalimentacion_code
      Code Type = Py
      Begin Routine:
        if Respuesta_2.corr==True:
          f_color="white"
          f_msg = "Correcto"

        else:
          f_color="white"
          f_msg = "Incorrecto"
    TextComponent text
      color [set every repeat] = $f_color
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $f_msg
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  Routine Instrucciones
    PolygonComponent polygon_8
      fillColor = black
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
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    TextComponent Instrucciones_p
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Bienvenido, vamos a iniciar la práctica.
        Pulse cualquier tecla para iniciar.
    KeyboardComponent Instruccion_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instrucciones_tarea
    PolygonComponent polygon_4
      fillColor = black
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
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    TextComponent Instrucciones_p_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        ¿Preparado para iniciar con la tarea?

        Recuerda, ignora el contenido en sí; pulsa
        Izquierda para COLOR rojo
        Abajo para el COLOR verde
        Derecha para el COLOR azul

        Pulse cualquier tecla para continuar
    KeyboardComponent Instruccion_keys_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Gracias
    PolygonComponent polygon_6
      fillColor = black
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
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    TextComponent Graciass
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        ¡ Gracias !

        Esta prueba ha terminado.
  Routine Validacion
    TextComponent Mensaje
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $mensaje
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    KeyboardComponent key_validacion
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        if cont==1:
            mensaje="Tuvo errores en la práctica, intente de nuevo. Presiones cualquier tecla para iniciar."
Flow
  Routine Instrucciones
  LoopInitiator Practica_trials loopType="TrialHandler"
    conditionsFile = conditions_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'words_p': 'rojo', 'letterColor_p': 'red', 'corrAns_p': 'left', 'congruent_p': 1},
      {'words_p': 'rojo', 'letterColor_p': 'green', 'corrAns_p': 'down', 'congruent_p': -1},
      {'words_p': 'XXX', 'letterColor_p': 'red', 'corrAns_p': 'left', 'congruent_p': 0},
      {'words_p': 'rojo', 'letterColor_p': 'blue', 'corrAns_p': 'right', 'congruent_p': -1},
      {'words_p': 'verde', 'letterColor_p': 'red', 'corrAns_p': 'left', 'congruent_p': -1},
      {'words_p': 'verde', 'letterColor_p': 'green', 'corrAns_p': 'down', 'congruent_p': 1},
      {'words_p': 'verde', 'letterColor_p': 'blue', 'corrAns_p': 'right', 'congruent_p': -1},
      {'words_p': 'azul', 'letterColor_p': 'red', 'corrAns_p': 'left', 'congruent_p': -1},
      {'words_p': 'azul', 'letterColor_p': 'green', 'corrAns_p': 'down', 'congruent_p': -1},
      {'words_p': 'azul', 'letterColor_p': 'blue', 'corrAns_p': 'right', 'congruent_p': 1},
      {'words_p': 'XXXX', 'letterColor_p': 'blue', 'corrAns_p': 'right', 'congruent_p': 0},
      {'words_p': 'XXXXX', 'letterColor_p': 'green', 'corrAns_p': 'down', 'congruent_p': 0}]
    Routine Practica
    Routine Retroalimentacion
  LoopTerminator Practica_trials
  Routine Instrucciones_tarea
  LoopInitiator stroop_trials loopType="TrialHandler"
    conditionsFile = conditions_task.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'words': 'XXX', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'words': 'XXX', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'words': 'XXX', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'words': 'XXX', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'words': 'XXX', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'words': 'XXX', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'words': 'XXX', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'words': 'XXX', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'words': 'XXX', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'words': 'XXX', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'words': 'XXX', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'words': 'XXX', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'words': 'XXX', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'words': 'XXX', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'words': 'XXXXX', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'words': 'XXXXX', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'words': 'XXXXX', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'words': 'XXXXX', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'words': 'XXXXX', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'words': 'XXXXX', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0}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
    Routine stroop
  LoopTerminator stroop_trials
  Routine Gracias
