PsychoPy2experiment version="2022.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine Inicio
    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_0
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5
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      text:
        Bienvenido

        En breve segundos comenzará a realizar las actividades previamente indicadas
  Routine Text_1
    PolygonComponent polygon_2
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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      text:
        ¿En qué te sientas normalmente?

        A) Silla
        B)  Mesa
        C) Comedor
  Routine Text_2
    PolygonComponent polygon_3
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_2
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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      text:
        ¿Con qué instrumento escribes?

        A) Carro
        B) Lápiz
        C) Lavadora
  Routine Text_3
    PolygonComponent polygon_4
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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      text:
        ¿Cómo abres la puerta de la casa?

        A) Llaves
        B) Papel
        C) Libro
  Routine Text_4
    PolygonComponent polygon_5
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_4
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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      text:
        ¿Con qué se paga normalmente el transporte?

        A) Favor
        B) Comida
        C) Dinero
  Routine Text_5
    PolygonComponent polygon_6
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_5
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = ¿Cuál es la dirección de su casa?
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  Routine Text_6
    PolygonComponent polygon_13
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_6
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = ¿Cuál es su número de celular?
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  Routine Text_7
    PolygonComponent polygon_7
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_7
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = ¿Cuál es el barrio donde vive?
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  Routine Text_8
    PolygonComponent polygon_8
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_8
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = ¿Cuál es su nombre completo?
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  Routine Text_9
    PolygonComponent polygon_9
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent image
      image = H:/Paradigmas Resonador Pyschopy/Proyecto_Resonador/gatos-gestos-m.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = ¿Cómo se llama este animal?
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  Routine Text_10
    PolygonComponent polygon_10
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent image_2
      image = H:/Paradigmas Resonador Pyschopy/Proyecto_Resonador/vaca.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_10
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = ¿Cómo se llama este animal?
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  Routine Text_11
    PolygonComponent polygon_11
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent image_3
      image = H:/Paradigmas Resonador Pyschopy/Proyecto_Resonador/linterna.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_11
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = ¿Cómo se llama este objeto?
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  Routine Text_12
    PolygonComponent polygon_12
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent image_4
      image = H:/Paradigmas Resonador Pyschopy/Proyecto_Resonador/mesa.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_12
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = ¿Cómo se llama este objeto?
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Flow
  Routine Inicio
  Routine Text_1
  Routine Text_2
  Routine Text_3
  Routine Text_4
  Routine Text_5
  Routine Text_6
  Routine Text_7
  Routine Text_8
  Routine Text_9
  Routine Text_10
  Routine Text_11
  Routine Text_12
