PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = BL
  keyboardBackend = ioHub
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Routines
  Routine inicio_labios
    PolygonComponent fondo_negro_2
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent ind_fruncir
      letterHeight = 0.09
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = FRUNCIR Y RELAJAR LABIOS
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    MovieComponent video_fruncir
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = video_fruncir.mov
      pos = (0, -0.15)
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine DESCANSO
    PolygonComponent fondo_negro_3
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent ind_descanso
      letterHeight = 0.17
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = DESCANSO
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  Routine inicio_lengua
    PolygonComponent fondo_negro_
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent ind_lengua
      letterHeight = 0.07
      pos = (0, 0.27)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        MOVER LA LENGUA
        HACIA LA DERECHA E IZQUIERDA
        CON LA BOCA CERRADA
    MovieComponent video_lengua
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = video_lengua.mov
      pos = (0, -0.15)
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine Bienvenido
    PolygonComponent fondo_negro
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent bienvenida
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        BIENVENIDO

        En breves segundos comenzará a realizar las actividades previamente indicadas
  Routine prueba
    MovieComponent movie
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = C:/Users/LAURA/Downloads/IMG-9163 (1).mov
      size = (0.8,0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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Flow
  Routine Bienvenido
  LoopInitiator repeticion_labios loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine inicio_labios
    Routine DESCANSO
  LoopTerminator repeticion_labios
  LoopInitiator repeticion_lengua loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine inicio_lengua
    Routine DESCANSO
  LoopTerminator repeticion_lengua
