PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MDP
  keyboardBackend = ioHub
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Routines
  Routine flexion_pie_derecho
    PolygonComponent fondo_negro_9
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent flexion_pie
      font = Comic Sans
      letterHeight = 0.09
      pos = (0, 0.23)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = PIE DERECHO
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    ImageComponent image_pie_derecho
      image = pie_derecho_flechas_rojas.png
      pos = (0, -0.15)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine CAMBIO
    PolygonComponent fondo_negro_8
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent cambio
      letterHeight = 0.18
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = CAMBIO
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  Routine flexion_pie_izquierdo
    PolygonComponent fondo_negro_10
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image_flexion_pie_izquierdo
      image = pie_izquierdo_flechas_rojas.png
      pos = (0, -0.15)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent flexion_pie_izquierdo_
      letterHeight = 0.09
      pos = (0, 0.23)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = PIE IZQUIERDO
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  Routine DESCANSO
    PolygonComponent fondo_negro_7
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent descanso
      letterHeight = 0.17
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = DESCANSO
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  Routine mov_mano_derecha
    PolygonComponent fondo_negro_2
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent mov_derecha
      letterHeight = 0.08
      pos = (0, 0.26)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        DEDOS MANO DERECHA
    ImageComponent image_mano_derecha
      image = dedos1_mano_derecha.png
      pos = (0, -0.1)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine mov_mano_izquierda
    PolygonComponent fondo_negro_4
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent mov_izquierda
      letterHeight = 0.08
      pos = (0, 0.26)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      text = DEDOS MANO IZQUIERDA
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    ImageComponent image_mano_izquierda
      image = dedos1_mano_izquierda.png
      pos = (0, -0.11)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine mov_2_mano_derecha
    PolygonComponent fondo_negro_5
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent ind_mano_izquierda
      letterHeight = 0.08
      pos = (0, 0.26)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = DEDOS MANO DERECHA
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    ImageComponent image_mano_izquierda
      image = dedos_mano.png
      pos = (0, -0.1)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine mov_2_mano_izquierda
    PolygonComponent fondo_negro_6
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent text_6
      letterHeight = 0.08
      pos = (0, 0.26)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = DEDOS MANO IZQUIERDA
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    ImageComponent image_3
      image = dedos_mano_izq.png
      pos = (0, -0.1)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine dedos_pie_derecho
    PolygonComponent fondo_negro_11
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent ind_dedos_derecho
      letterHeight = 0.09
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = DEDOS PIE DERECHO
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    ImageComponent image_dedos_pie_derecho
      image = dedos_pie_derecho_flecha_roja.png
      pos = (0, -0.2)
      size = (1.2, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine dedos_pie_izquierdo
    PolygonComponent fondo_negro_12
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent ind_dedos_izquierdo
      letterHeight = 0.09
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = DEDOS PIE IZQUIERDO
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    ImageComponent image_dedos_pie_izquierdo
      image = dedos_pie_izquierdo_flecha_roja.png
      pos = (0, -0.2)
      size = (1.2, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine Bienvenido
    PolygonComponent fondo_negro
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent bienvenido
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        BIENVENIDO

        En breves segundos comenzará a realizar las actividades previamente indicadas
  Routine indicaciones
    PolygonComponent fondo_negro_3
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent indicaciones_
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = MUEVA LOS DEDOS SEÑALADOS EN ROJO
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Flow
  Routine Bienvenido
  Routine indicaciones
  LoopInitiator repeticion_mano_204s_3_4min loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine mov_mano_derecha
    Routine CAMBIO
    Routine mov_mano_izquierda
    Routine DESCANSO
    Routine mov_2_mano_derecha
    Routine CAMBIO
    Routine mov_2_mano_izquierda
    Routine DESCANSO
  LoopTerminator repeticion_mano_204s_3_4min
  LoopInitiator repeticion_pie_102seg_1_7min loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine flexion_pie_derecho
    Routine CAMBIO
    Routine flexion_pie_izquierdo
    Routine DESCANSO
  LoopTerminator repeticion_pie_102seg_1_7min
  LoopInitiator repeticion_dedos_pie_102seg_1_7min loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine dedos_pie_derecho
    Routine CAMBIO
    Routine dedos_pie_izquierdo
    Routine DESCANSO
  LoopTerminator repeticion_dedos_pie_102seg_1_7min
